PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/sub-%s_task-%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '666', 'group': "['food','drug']", 'extra': '[0,1]', 'practice': '[1,0]', 'dorate': '[1,0]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/practice/AA026307.png', 'stimuli/practice/AA026337.png', 'stimuli/practice/AA026339.png', 'stimuli/practice/AA026360.png', 'stimuli/selection_box.png', 'stimuli/food/1%milk.jpg', 'stimuli/food/air popcorn.jpg', 'stimuli/food/american cheese.jpg', 'stimuli/food/apple slices.jpg', 'stimuli/food/avacado.jpg', 'stimuli/food/baby cheese.jpg', 'stimuli/food/bagel and cc.jpg', 'stimuli/food/bagel plain.jpg', 'stimuli/food/baguette oil.jpg', 'stimuli/food/baked potato.jpg', 'stimuli/food/banana.jpg', 'stimuli/food/broccoli cauliflower.jpg', 'stimuli/food/brownie.jpg', 'stimuli/food/burger.jpg', 'stimuli/food/celery and carrot sticks.jpg', 'stimuli/food/Cheese nachos.jpg', 'stimuli/food/cherries.jpg', 'stimuli/food/cherry tomato.jpg', 'stimuli/food/chicken nuggets2.jpg', 'stimuli/food/cookies.jpg', 'stimuli/food/corn cob.jpg', 'stimuli/food/cucumber slices.jpg', 'stimuli/food/cupcakes am.jpg', 'stimuli/food/doughnuts.jpg', 'stimuli/food/eggs.jpg', 'stimuli/food/french fries.jpg', 'stimuli/food/fried eggs.jpg', 'stimuli/food/froot loops w milk.jpg', 'stimuli/food/granola w milk.jpg', 'stimuli/food/Grapes.jpg', 'stimuli/food/green beans.jpg', 'stimuli/food/grilled cheese.jpg', 'stimuli/food/grilled chicken strips.jpg', 'stimuli/food/Hershey Kisses.jpg', 'stimuli/food/hotdog w must.jpg', 'stimuli/food/ice cream sundae 002.jpg', 'stimuli/food/kiwi.jpg', 'stimuli/food/lollipops.jpg', 'stimuli/food/m_and_m.jpg', 'stimuli/food/mac & cheese.jpg', 'stimuli/food/mashed potato.jpg', 'stimuli/food/mini muffins.jpg', 'stimuli/food/mozarella sticks.jpg', 'stimuli/food/mushrooms.jpg', 'stimuli/food/orange slices.jpg', 'stimuli/food/PB.jpg', 'stimuli/food/peaches.jpg', 'stimuli/food/pickles.jpg', 'stimuli/food/pizza.jpg', 'stimuli/food/Pretzels.jpg', 'stimuli/food/raisin bran w milk.jpg', 'stimuli/food/raisins.jpg', 'stimuli/food/reeses.jpg', 'stimuli/food/rice cakes.jpg', 'stimuli/food/rigatoni and sauce.jpg', 'stimuli/food/rigatoni.jpg', 'stimuli/food/ritz.jpg', 'stimuli/food/salad w chicken.jpg', 'stimuli/food/saltines.jpg', 'stimuli/food/seaweed.jpg', 'stimuli/food/Skim milk.jpg', 'stimuli/food/soup with spoon.jpg', 'stimuli/food/sour patch.jpg', 'stimuli/food/soy chips.jpg', 'stimuli/food/steak.jpg', 'stimuli/food/strawberries.jpg', 'stimuli/food/string cheese.jpg', 'stimuli/food/sushi w_condiments.jpg', 'stimuli/food/tacos.jpg', 'stimuli/food/trail mix.jpg', 'stimuli/food/Tribe humus pita.jpg', 'stimuli/food/turkey sandwich.jpg', 'stimuli/food/Whole milk.jpg', 'stimuli/food/yellow popcorn.jpg', 'stimuli/food/yellow rice_beans.jpg', 'stimuli/food/yogurt no spoon.jpg', 'stimuli/food/yogurt pretzels.jpg', 'finalfooditems.csv', 'finalfooditems.xlsx', 'foodChoiceTrials.xlsx', 'stimuli/examples/shard-example_L1.png', 'stimuli/examples/shard-example_L2.png', 'stimuli/examples/shard-example_L3.png', 'stimuli/examples/shard-example_L4.png', 'stimuli/examples/shard-example_L5.png', 'stimuli/examples/shard-example_L6.png', 'stimuli/examples/shard-example_R1.png', 'stimuli/examples/shard-example_R2.png', 'stimuli/examples/shard-example_R3.png', 'stimuli/examples/shard-example_R4.png', 'stimuli/examples/shard-example_R5.png', 'stimuli/examples/shard-example_R6.png', 'practice.csv', 'training_trials.csv', 'trials.csv']
  Save csv file = True
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1536, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = crystals
  keyboardBackend = ioHub
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Routines
  Routine choice
    CodeComponent outline_settings
      Code Type = Auto->JS
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      Begin Experiment:
        thisImageA = [];
        thisImageB = [];
        bonus_img_left = [];
        bonus_img_right = [];
        bonus_choice = [];
        thisImage_obj = [];
        thisImage_obj_A = [];
        thisImage_obj_B = [];
        trialN = [];
        bonus_img = [];
      Begin Routine:
        #for trialN in range(foodDF.length):
        #thisImage_obj = foodDF[trialN]
        thisImage_obj = foodDF[(TrialN-1)]
        thisImage_obj_A = thisImage_obj.item_a_img;
        thisImage_obj_B = thisImage_obj.item_b_img;
        thisImageA = thisImage_obj_A.image;
        thisImageB = thisImage_obj_B.image;
      End Routine:
        if choice_resp.keys == 'f': #left
            this_trial_choice = 'left'
            outline_shape.setPos((-.45, 0), log=True)
            outline_shape.setSize(.5, .5)
            outline_shape.setAutoDraw(True)
        elif choice_resp.keys == 'j': #right
            this_trial_choice = 'right'
            outline_shape.setPos((.45, 0), log=True)
            outline_shape.setSize(.5, .5)
            outline_shape.setAutoDraw(True)

        thisExp.addData('agent_choice', this_trial_choice)

        #for trialN in range(foodDF.length):
        #    if trialN == 15: # psuedorandomly selected trial
        if TrialN == 15:
            bonus_img_left = thisImageA
            bonus_img_right = thisImageB
            if this_trial_choice == 'left':
                bonus_choice = 'left'
                bonus_img = thisImageA
            if this_trial_choice == 'right':
                bonus_choice = 'right'
                bonus_img = thisImageB
    KeyboardComponent choice_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image_A
      image [set every repeat] = $thisImageA
      pos = (-0.45, 0)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent image_B
      image [set every repeat] = $thisImageB
      pos = (0.45, 0)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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
  Routine start_exp
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        //random = Math.random;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;
        //util.addInfoFromUrl(expInfo);
        outline_shape = new visual.ImageStim({"win": psychoJS.window, "name": "outline_shape", "image": "stimuli/selection_box.png", "mask": null, "anchor": "center", "ori": 0.0, "pos": [0, 0], "size": [0.5, 0.5], "color": [1, 1, 1], "colorSpace": "rgb", "opacity": null, "flipHoriz": false, "flipVert": false, "texRes": 128.0, "interpolate": false, "depth": 0.0});
    CodeComponent hide_mouse
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        myMouse = event.Mouse()
        myMouse.setPos(newPos=(1,1))

        win.mouseVisible = False
      End Experiment:
        win.mouseVisible = True
      End JS Experiment:
        //document.body.style.cursor='auto';
    CodeComponent check_bonus
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['extra'] == '1':
            BONUS_BOOL = 1
        elif expInfo['extra'] == '0':
            BONUS_BOOL = 0

        participant_id = expInfo["participant"]
    CodeComponent check_practice
      Code Type = Both
      Begin Experiment:
        from random import shuffle
      Begin JS Routine:
        if ((expInfo["practice"] === "1")) {
            PRACTICE_BOOL = 1;
        } else {
            if ((expInfo["practice"] === "0")) {
                PRACTICE_BOOL = 0;
            }
        }
      Begin Routine:
        if expInfo['practice'] == '1':
            PRACTICE_BOOL = 1
        elif expInfo['practice'] == '0':
            PRACTICE_BOOL = 0
    CodeComponent id_grab
      Code Type = Both
      disabled = True
      Before Experiment:
        subID = expInfo['participant']
      Before JS Experiment:
        var subID;
        const queryString = window.location.search;
        const urlParams = new URLSearchParams(queryString);
        subID = urlParams.get('participant'); //make sure this parameter is same as how you defined it in Prolific (aka case sensitive)
        expInfo['participant'] = subID;
        console.log(subID);
    CodeComponent check_stim
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['group'] == 'food':
            FOOD_BOOL = 1
            foodDF = []
            print('Food')
        else:
            FOOD_BOOL = 0
        if expInfo['group'] == 'drug':
            DRUG_BOOL = 1
            print('Drug')
        else:
            DRUG_BOOL = 0
    CodeComponent check_rate_js
      Code Type = JS
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      Begin JS Experiment:
        //foodDF = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": [], "rank": [], "whichItem": [], "diff": []};

        if ((expInfo["dorate"] === "1")) {
            RATE_BOOL = 1;
            console.log("Doing Ratings");
        } else {
            RATE_BOOL = 0;
            console.log("Not Doing Ratings");
        }

        if ( (RATE_BOOL === 0) & (FOOD_BOOL === 1) ){
            console.log("Generating Food Ratings");
            foodfile = "finalfooditems.csv";
            //foodListData = new data.TrialHandler2({"trialList": data.importConditions(foodfile), "nReps": 77, "method": "sequential", "extraInfo": expInfo});
            foodListData = new TrialHandler({
                psychoJS: psychoJS,
                nReps: 77, method: TrialHandler.Method.SEQUENTIAL,
                extraInfo: expInfo, originPath: undefined,
                trialList: foodfile,
                seed: undefined, name: 'foodListData'
            });

               function range(start, stop, step) {
                if (typeof stop == 'undefined') {
                    // one param defined
                    stop = start;
                    start = 0;
                }

                if (typeof step == 'undefined') {
                    step = 1;
                }

                if ((step > 0 && start >= stop) || (step < 0 && start <= stop)) {
                    return [];
                }

                var result = [];
                for (var i = start; step > 0 ? i < stop : i > stop; i += step) {
                    result.push(i);
                }

                return result;
            };

            foodTrialList = foodListData.trialList;
            foodlen = foodTrialList.length;
            console.log("There are ", foodlen," foods");
            food_ratings_df = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": []};
            num_rows = foodlen;
            for (var i, _pj_c = 0, _pj_a = range(foodlen), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                i = _pj_a[_pj_c];
                food_ratings_df["id"].push((i + 1));
                food_ratings_df["image"].push(foodTrialList[i]);
                let rating = Math.round((Math.random() * 10) * 100) / 100;
                food_ratings_df["rating"].push(rating);
                if ((rating <= 3.33)) {
                    food_ratings_df["val_cat"].push("LV");
                } else {
                    if ((rating >= 6.67)) {
                        food_ratings_df["val_cat"].push("HV");
                    } else {
                        food_ratings_df["val_cat"].push("MV");
                    }
                }
                food_ratings_df["nrepeat"].push(0);
            };

          // console.log(food_ratings_df);
        }


        if ((RATE_BOOL === 0)) {
            // Settings
            let nTrial = 45;
            let minDiff = 0.5;
            let maxDiff = 3;
         // Separate foods based on value category
            let HVdf = [];
            let MVdf = [];
            let LVdf = [];

            for (var i = 0; i <= food_ratings_df.id.length; i++) {
                if (food_ratings_df.val_cat[i] === 'HV') {
                    HVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
                } else if (food_ratings_df.val_cat[i] === 'MV') {
                    MVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
                } else if (food_ratings_df.val_cat[i] === 'LV') {
                    LVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
                }
            }

            // Ranking for foods
            HVdf.sort((a, b) => b.rating - a.rating);
            MVdf.sort((a, b) => b.rating - a.rating);
            LVdf.sort((a, b) => b.rating - a.rating);

            for (var i = 0; i < HVdf.length; i++) {
                HVdf[i].ranking = (i+1);
            }
            for (var i = 0; i < MVdf.length; i++) {
                MVdf[i].ranking = (i+1);
            }
            for (var i = 0; i < LVdf.length; i++) {
                LVdf[i].ranking = (i+1);
            }


            // Function to calculate the absolute difference between two values
            function absDiff(a, b) {
                return Math.abs(a - b);
            }

            // Function to find the intersection of two arrays
            function intersect(arr1, arr2) {
                return arr1.filter((value) => arr2.includes(value));
            }

            // Helper function to get a random integer within a range
            function getRandomInt(min, max) {
                return Math.floor(Math.random() * (max - min + 1) + min);
            }

            // Helper function for median
            function median(values){
                if(values.length ===0) throw new Error("No inputs");

                values.sort(function(a,b){
                return a-b;
                });

                var half = Math.floor(values.length / 2);

                if (values.length % 2)
                return values[half];

                return (values[half - 1] + values[half]) / 2.0;
            }

            // Shuffle array
            function shuffleArray(array) {
                return array.sort(() => Math.random() - 0.5);
            }

            // Function to generate trials
            function generateTrial(categoryList, desired_diff) {
                let maxRep = 5; // Maximum number of repeats per item
                let good = 0;
                categoryList = shuffleArray(categoryList);
                while (good == 0){
                    for (let i = 0; i < categoryList.length; i++) {
                        for (let j = i + 1; j < categoryList.length; j++) {
                            let diff = Math.abs(categoryList[i].rating_round - categoryList[j].rating_round);
                            if (diff == desired_diff) {
                                var nRepA = categoryList[i].nrepeat;
                                var nRepB = categoryList[j].nrepeat;
                                // check repeats
                                if (nRepA < maxRep && nRepB < maxRep ) {
                                    tmp_trial = {
                                        idA: categoryList[i].id,
                                        idB: categoryList[j].id,
                                        rating_diff: diff
                                    };
                                    // Increase number of repetions
                                    categoryList[i].nrepeat++;
                                    categoryList[j].nrepeat++;
                                    return tmp_trial;
                                }
                            }
                        }
                    }
                    // If enough iterations have passed without filling list need to increase max repeat
                    console.log("Max Hit")
                    maxRep++;
                }

            }

            // Round item ratings to nearest 0.5
            LVdf.forEach(item => {
                item.rating_round = Math.round(item.rating * 2) / 2;
            });

            MVdf.forEach(item => {
                item.rating_round = Math.round(item.rating * 2) / 2;
            });

            HVdf.forEach(item => {
                item.rating_round = Math.round(item.rating * 2) / 2;
            });

            // Holding trials
            var LV_trial_list = [];
            var MV_trial_list = [];
            var HV_trial_list = [];

            // Generate potential trials in MV condition to get distribution for other cats

            // IDs
            let MV_IDs = MVdf.map(a => a.id);
            let HV_IDs = HVdf.map(a => a.id);
            let LV_IDs = LVdf.map(a => a.id);

            // Get all combinations
            var MV_combos = MV_IDs.flatMap(
                (v, i) => MV_IDs.slice(i+1).map( w => [v, w] )
            );

            var HV_combos = HV_IDs.flatMap(
                (v, i) => HV_IDs.slice(i+1).map( w => [v, w] )
            );

            var LV_combos = LV_IDs.flatMap(
                (v, i) => LV_IDs.slice(i+1).map( w => [v, w] )
            );

            var MV_combos_shuffled = MV_combos
            .map(value => ({ value, sort: Math.random() }))
            .sort((a, b) => a.sort - b.sort)
            .map(({ value }) => value)

            // Do something slightly different for LV and HV to get both IDs and VDs
            let MV_combo_list = [];
            let MV_count = 1;
            for (var i = 0; i< MV_combos.length; i++) {

                var tmp_items = MV_combos[i];
                var tmp_itemA_idx = MVdf.findIndex(x => x.id ===tmp_items[0]);
                var tmp_itemB_idx = MVdf.findIndex(x => x.id ===tmp_items[1])
                var tmp_diff = Math.abs(MVdf[tmp_itemA_idx].rating_round - MVdf[tmp_itemB_idx].rating_round);
                // Make sure difference is within bounds
                if ( (tmp_diff < minDiff) || (tmp_diff > maxDiff) ) {
                    continue;
                }
                MV_combo_list.push( {idA: tmp_items[0], idB: tmp_items[1], rating_diff: tmp_diff, match_id: MV_count});
                MV_count++;
            }


            let HV_combo_list = [];
            let HV_count = 1;
            for (var i = 0; i< HV_combos.length; i++) {

                var tmp_items = HV_combos[i];
                var tmp_itemA_idx = HVdf.findIndex(x => x.id ===tmp_items[0]);
                var tmp_itemB_idx = HVdf.findIndex(x => x.id ===tmp_items[1])
                var tmp_diff = Math.abs(HVdf[tmp_itemA_idx].rating_round - HVdf[tmp_itemB_idx].rating_round);
                // Make sure difference is within bounds
                if ( (tmp_diff < minDiff) || (tmp_diff > maxDiff) ) {
                    continue;
                }
                HV_combo_list.push( {idA: tmp_items[0], idB: tmp_items[1], rating_diff: tmp_diff, match_id: HV_count});
                HV_count++;
            }

            let LV_combo_list = [];
            let LV_count = 1;
            for (var i = 0; i< LV_combos.length; i++) {

                var tmp_items = LV_combos[i];
                var tmp_itemA_idx = LVdf.findIndex(x => x.id ===tmp_items[0]);
                var tmp_itemB_idx = LVdf.findIndex(x => x.id ===tmp_items[1])
                var tmp_diff = Math.abs(LVdf[tmp_itemA_idx].rating_round - LVdf[tmp_itemB_idx].rating_round);
                // Make sure difference is within bounds
                if ( (tmp_diff < minDiff) || (tmp_diff > maxDiff) ) {
                    continue;
                }
                LV_combo_list.push( {idA: tmp_items[0], idB: tmp_items[1], rating_diff: tmp_diff, match_id : LV_count});
                LV_count++;
            }


            // Try to get an even split of differences
            let rating_diff_list = []
            let max_num_of_diff = [];
            let list_of_differences = [{diff: 0.5, maxN: 0, unique: 0},
                {diff: 1.0, maxN: 0, unique: 0},
                {diff: 1.5, maxN: 0, unique: 0},
                {diff: 2, maxN: 0, unique: 0},
                {diff: 2.5, maxN: 0, unique: 0}];

            // To make sure there are enough in each value-difference category
            for (i = 0; i < list_of_differences.length; i++) {

                var thisDiff = list_of_differences[i].diff;
                var tmp_diff_LV = LV_combo_list.filter(a => a.rating_diff == thisDiff);
                var tmp_diff_MV = MV_combo_list.filter(a => a.rating_diff == thisDiff);
                var tmp_diff_HV = HV_combo_list.filter(a => a.rating_diff == thisDiff);

                // Across all value categories, determine how many possible combinations are possible
                var tmp_max = Math.min(tmp_diff_LV.length,tmp_diff_MV.length,tmp_diff_HV.length);

                // Unique IDs
                var unique_LV = [];
                var unique_MV = [];
                var unique_HV = [];
                for (j=0;j<tmp_diff_LV.length;j++) {
                    unique_LV.push(tmp_diff_LV[j].idA);
                    unique_LV.push(tmp_diff_LV[j].idB);

                }
                unique_LV = [...new Set(unique_LV)];

                for (j=0;j<tmp_diff_MV.length;j++) {
                    unique_MV.push(tmp_diff_MV[j].idA);
                    unique_LV.push(tmp_diff_MV[j].idB);

                }
                unique_MV = [...new Set(unique_MV)];

                for (j=0;j<tmp_diff_HV.length;j++) {
                    unique_HV.push(tmp_diff_HV[j].idA);
                    unique_HV.push(tmp_diff_HV[j].idB);

                }
                unique_HV = [...new Set(unique_HV)];

                var tmp_unique = {LV: unique_LV,
                                MV: unique_MV,
                               HV: unique_HV};

                list_of_differences[i].maxN = tmp_max;
                list_of_differences[i].unique = tmp_unique;

            }

            // Number of trials to generate per value-difference
            // Start out with an equal number across difficulty levels
            var n_trial_per_diff = [
                nTrial/list_of_differences.length, // 0.5
                nTrial/list_of_differences.length, // 1.0
                nTrial/list_of_differences.length, // 1.5
                nTrial/list_of_differences.length, // 2.0
                nTrial/list_of_differences.length  // 2.5
            ];

            var check = 0;
            // Make sure each difference has trials in each value categoryu
            while (check == 0) {
                var nCheck = 0;
                for (i=0;i<n_trial_per_diff.length;i++) {
                    list_of_differences[i].maxN;
                    // If the number of trials per difference is less than maxN, then we good
                    if (n_trial_per_diff[i] <= list_of_differences[i].maxN) {
                        nCheck++;
                    } else {
                        // Otherwise, remove a trial and place it elsewhere
                        n_trial_per_diff[i] = n_trial_per_diff[i] - 1;
                        if(i==0) {
                            n_trial_per_diff[i] = n_trial_per_diff[i] - 1;
                            n_trial_per_diff[i+1] =  n_trial_per_diff[i+1] + 1;
                            i=-1; continue;
                        } else {
                            n_trial_per_diff[i] = n_trial_per_diff[i] - 1;
                            n_trial_per_diff[i-1] =  n_trial_per_diff[i-1] + 1;
                            i=-1; continue;
                        }
                    }
                }
                // If all differences meet criteria, break loop
                if (nCheck == n_trial_per_diff.length) {
                    check = 1;
                }
            }
            //console.log(n_trial_per_diff)
            //console.log(list_of_differences)

            // Generate trials
            for (var i=0;i<list_of_differences.length;i++){
                var potential_diff = list_of_differences[i].diff;
                for (var j=0;j<=n_trial_per_diff[i];j++) {
                    var tmp_lv = generateTrial(LVdf,potential_diff);

                    var tmp_mv = generateTrial(MVdf,potential_diff);

                    var tmp_hv = generateTrial(HVdf,potential_diff);

                    LV_trial_list.push(tmp_lv)
                    MV_trial_list.push(tmp_mv)
                    HV_trial_list.push(tmp_hv)
                }
            }

            // Check on number of each
            /*
            console.log(list_of_differences[0].maxN)
            console.log(list_of_differences[1].maxN)
            console.log(list_of_differences[2].maxN)
            console.log(list_of_differences[3].maxN)
            console.log(list_of_differences[4].maxN)
            */

            // Now fill dataframes with actual trial info

            for (i=0;i<=nTrial;i++) {
                var tmp_items = LV_trial_list[i];
                var tmp_itemA_idx = LVdf.findIndex(x => x.id ===tmp_items['idA']) ;
                var tmp_itemB_idx = LVdf.findIndex(x => x.id ===tmp_items['idB']) ;

                var tmp_trial = {trial:(i+1), val_cat: 'LV',
                            item_a_img: LVdf[tmp_itemA_idx]['image'],
                            item_b_img: LVdf[tmp_itemB_idx]['image'],
                            item_a_rating: LVdf[tmp_itemA_idx]['rating'],
                            item_b_rating: LVdf[tmp_itemB_idx]['rating'],
                            rating_diff: tmp_items['rating_diff'] };

                foodDF.push(tmp_trial);

            }

            for (i=0;i<=nTrial;i++) {
                var tmp_items = MV_trial_list[i];
                var tmp_itemA_idx = MVdf.findIndex(x => x.id ===tmp_items['idA']) ;
                var tmp_itemB_idx = MVdf.findIndex(x => x.id ===tmp_items['idB']) ;

                var tmp_trial = {trial:(i+1), val_cat: 'MV',
                            item_a_img: MVdf[tmp_itemA_idx]['image'],
                            item_b_img: MVdf[tmp_itemB_idx]['image'],
                            item_a_rating: MVdf[tmp_itemA_idx]['rating'],
                            item_b_rating: MVdf[tmp_itemB_idx]['rating'],
                            rating_diff: tmp_items['rating_diff'] };

                foodDF.push(tmp_trial);

            }

            for (i=0;i<=nTrial;i++) {
                var tmp_items = HV_trial_list[i];
                var tmp_itemA_idx = HVdf.findIndex(x => x.id ===tmp_items['idA']) ;
                var tmp_itemB_idx = HVdf.findIndex(x => x.id ===tmp_items['idB']) ;
               // if (i %%)

                var tmp_trial = {trial:(i+1), val_cat: 'HV',
                            item_a_img: HVdf[tmp_itemA_idx]['image'],
                            item_b_img: HVdf[tmp_itemB_idx]['image'],
                            item_a_rating: HVdf[tmp_itemA_idx]['rating'],
                            item_b_rating: HVdf[tmp_itemB_idx]['rating'],
                            rating_diff: tmp_items['rating_diff'] };

                foodDF.push(tmp_trial);

            }
            console.log("Number of food choice trials: ", foodDF.length);
            console.log("These are the foods we'll use",foodDF);

        }
    CodeComponent check_rate_py
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        foodDF = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": [], "rank": [], "whichItem": [], "diff": []};
        if expInfo["dorate"] == "1":
            RATE_BOOL = 1;
            print("Doing Ratings");
        else:
            RATE_BOOL = 0;
            print("Not Doing Ratings");
      Begin Routine:
        if RATE_BOOL == 0:
            print("Generating Food Ratings")
            foodfile = 'finalfooditems.csv'

            foodListData = data.TrialHandler2(trialList= data.importConditions(foodfile), nReps = 77, method='sequential', extraInfo= expInfo)
            foodTrialList = foodListData.trialList

            foodlen = len(foodTrialList)
            #print('Number of foods: ' + str(foodlen))

            foodList = []
            foods = {}
            for i in range(foodlen):
                #print(foodList[i]['image'])
                foodList.append(foodTrialList[i]['image'])

            foods['image'] = foodList

            import numpy as np

            food_ratings_df = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": []}
            num_rows = foodlen
            for i in range(foodlen):
                food_ratings_df["id"].append((i + 1))
                food_ratings_df["image"].append(foods['image'][i])
                rating = round(np.random.randint(low=1,high=10), 2)
                #rating = Math.round((Math.random() * 11), 2)
                food_ratings_df["rating"].append(rating)
                if rating <= 3.33:
                    food_ratings_df["val_cat"].append("LV")
                elif rating >= 6.67:
                    food_ratings_df["val_cat"].append("HV")
                else:
                    food_ratings_df["val_cat"].append("MV")
                food_ratings_df["nrepeat"].append(0)

            print(food_ratings_df)
  Routine prac_instr
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Before you start the main task, you will complete a few practice rounds.

        Select the food item which you'd prefer to consume at the end of the experiment. Use the F key to select the image on the left and the J key to select the image on the right.

        When you are ready, press the SPACE BAR to begin.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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
  Routine ender
    CodeComponent set_end_txt
      Code Type = Auto->JS
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      Begin Routine:
        if BONUS_BOOL == 1:
            ender_txt_disp = 'Congratulations - you have completed the experiment!\n\nPress the SPACE BAR to see your reward.'
        else:
            ender_txt_disp = 'Congratulations - you have completed all of the tasks!\n\nPress the SPACE BAR to exit.'
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ender_txt_disp
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine colorblindness
    TextComponent colorblind_txt
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Do you have full color vision?

        Press 'Y' for yes and 'N' for no.
    KeyboardComponent full_color_vision
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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
  Routine rateFood
    CodeComponent cycleFood
      Code Type = JS
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      Begin JS Routine:
        thisFood = image;
      Each JS Frame:
        if ((food_slider.rating === null)) {
            rating_value = 0;
        } else {
            rating_value = Math.round((food_slider.getRating() / 10), 2);
        }
    SliderComponent food_slider
      forceEndRoutine = False
      granularity = .1
      labels = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      pos = (0, -0.175)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    ImageComponent slideshow_foodImage
      image [set every repeat] = $thisFood
      pos = (0, 0.15)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent slider_value
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.075)
      startVal [condition] = food_slider.rating!=None
      text [set every frame] = $rating_value
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    ButtonComponent next_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = [0.5, 0.13]
      startVal [condition] = $food_slider.rating!=null
      text = Press Spacebar To Continue
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    KeyboardComponent check_space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = $food_slider.rating!=null
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    CodeComponent filterFood
      Code Type = JS
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      Begin JS Experiment:
        if ((RATE_BOOL !== "0")) {
            food_ratings_df = {"id": [], "image": [], "rating": [], "val_cat": [], "nrepeat": []};
        }
      Each JS Frame:
        food_ratings_df["id"].push(food_ratings_df["id"].length + 1);
        food_ratings_df["image"].push(thisFood);
        food_ratings_df["rating"].push(Math.round(food_slider.getRating()/10,2));

        if (food_slider.getRating()/10 <= 3.33) {
            food_ratings_df["val_cat"].push("LV");
        } else if (food_slider.getRating()/10 >= 6.67) {
            food_ratings_df["val_cat"].push("HV");
        } else {
            food_ratings_df["val_cat"].push("MV");
        }

        food_ratings_df["nrepeat"].push(0);
      End JS Experiment:
        file_str = (("food_ratings_" + expInfo["participant"].toString()) + ".csv");
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  Routine start_food_ratings
    KeyboardComponent start_food_rat_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_food_rat_text
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        You will now view a series of food images. Using the mouse, please indicate how much you would like to consume food in each image, on a scale from 1 ("Not at al") to 10 ("Very much").

        Press the RIGHT ARROW to start.
    CodeComponent show_mouse
      Code Type = Both
      End JS Routine:
        psychoJS.window.mouseVisible = true;
        document.body.style.cursor='auto';
      End Routine:
        win.mouseVisible = True
  Routine hide_mouse_routine
    CodeComponent hide_mouse_2
      Code Type = Both
      Begin JS Routine:
        psychoJS.window.mouseVisible = false;
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = False
  Routine sort_food
    CodeComponent sort_food_df_js
      Code Type = JS
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      Begin JS Routine:
        // Settings
        let nTrial = 45;
        let minDiff = 0.5;
        let maxDiff = 3;

        // Separate foods based on value category
        let HVdf = [];
        let MVdf = [];
        let LVdf = [];

        for (var i = 0; i <= food_ratings_df.id.length; i++) {
            if (food_ratings_df.val_cat[i] === 'HV') {
                HVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
            } else if (food_ratings_df.val_cat[i] === 'MV') {
                MVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
            } else if (food_ratings_df.val_cat[i] === 'LV') {
                LVdf.push( {id: food_ratings_df.id[i], image: food_ratings_df.image[i], rating: food_ratings_df.rating[i], val_cat: food_ratings_df.val_cat[i], nrepeat: 0});
            }
        }

        // Ranking for foods
        HVdf.sort((a, b) => b.rating - a.rating);
        MVdf.sort((a, b) => b.rating - a.rating);
        LVdf.sort((a, b) => b.rating - a.rating);

        for (var i = 0; i < HVdf.length; i++) {
            HVdf[i].ranking = (i+1);
        }
        for (var i = 0; i < MVdf.length; i++) {
            MVdf[i].ranking = (i+1);
        }
        for (var i = 0; i < LVdf.length; i++) {
            LVdf[i].ranking = (i+1);
        }


        // Function to calculate the absolute difference between two values
        function absDiff(a, b) {
            return Math.abs(a - b);
        }

        // Function to find the intersection of two arrays
        function intersect(arr1, arr2) {
            return arr1.filter((value) => arr2.includes(value));
        }

        // Helper function to get a random integer within a range
        function getRandomInt(min, max) {
            return Math.floor(Math.random() * (max - min + 1) + min);
        }

        // Helper function for median
        function median(values){
            if(values.length ===0) throw new Error("No inputs");

            values.sort(function(a,b){
            return a-b;
            });

            var half = Math.floor(values.length / 2);

            if (values.length % 2)
            return values[half];

            return (values[half - 1] + values[half]) / 2.0;
        }

        // Shuffle array
        function shuffleArray(array) {
            return array.sort(() => Math.random() - 0.5);
        }

        // Function to generate trials
        function generateTrial(categoryList, desired_diff) {
            let maxRep = 5; // Maximum number of repeats per item
            let good = 0;
            categoryList = shuffleArray(categoryList);
            while (good == 0){
                for (let i = 0; i < categoryList.length; i++) {
                    for (let j = i + 1; j < categoryList.length; j++) {
                        let diff = Math.abs(categoryList[i].rating_round - categoryList[j].rating_round);
                        if (diff == desired_diff) {
                            var nRepA = categoryList[i].nrepeat;
                            var nRepB = categoryList[j].nrepeat;
                            // check repeats
                            if (nRepA < maxRep && nRepB < maxRep ) {
                                tmp_trial = {
                                    idA: categoryList[i].id,
                                    idB: categoryList[j].id,
                                    rating_diff: diff
                                };
                                // Increase number of repetions
                                categoryList[i].nrepeat++;
                                categoryList[j].nrepeat++;
                                return tmp_trial;
                            }
                        }
                    }
                }
                // If enough iterations have passed without filling list need to increase max repeat
                console.log("Max Hit")
                maxRep++;
            }

        }

        // Round item ratings to nearest 0.5
        LVdf.forEach(item => {
            item.rating_round = Math.round(item.rating * 2) / 2;
        });

        MVdf.forEach(item => {
            item.rating_round = Math.round(item.rating * 2) / 2;
        });

        HVdf.forEach(item => {
            item.rating_round = Math.round(item.rating * 2) / 2;
        });

        // Holding trials
        var LV_trial_list = [];
        var MV_trial_list = [];
        var HV_trial_list = [];

        // Generate potential trials in MV condition to get distribution for other cats

        // IDs
        let MV_IDs = MVdf.map(a => a.id);
        let HV_IDs = HVdf.map(a => a.id);
        let LV_IDs = LVdf.map(a => a.id);

        // Get all combinations
        var MV_combos = MV_IDs.flatMap(
            (v, i) => MV_IDs.slice(i+1).map( w => [v, w] )
        );

        var HV_combos = HV_IDs.flatMap(
            (v, i) => HV_IDs.slice(i+1).map( w => [v, w] )
        );

        var LV_combos = LV_IDs.flatMap(
            (v, i) => LV_IDs.slice(i+1).map( w => [v, w] )
        );

        var MV_combos_shuffled = MV_combos
        .map(value => ({ value, sort: Math.random() }))
        .sort((a, b) => a.sort - b.sort)
        .map(({ value }) => value)

        // Do something slightly different for LV and HV to get both IDs and VDs
        let MV_combo_list = [];
        let MV_count = 1;
        for (var i = 0; i< MV_combos.length; i++) {

            var tmp_items = MV_combos[i];
            var tmp_itemA_idx = MVdf.findIndex(x => x.id ===tmp_items[0]);
            var tmp_itemB_idx = MVdf.findIndex(x => x.id ===tmp_items[1])
            var tmp_diff = Math.abs(MVdf[tmp_itemA_idx].rating_round - MVdf[tmp_itemB_idx].rating_round);
            // Make sure difference is within bounds
            if ( (tmp_diff < minDiff) || (tmp_diff > maxDiff) ) {
                continue;
            }
            MV_combo_list.push( {idA: tmp_items[0], idB: tmp_items[1], rating_diff: tmp_diff, match_id: MV_count});
            MV_count++;
        }


        let HV_combo_list = [];
        let HV_count = 1;
        for (var i = 0; i< HV_combos.length; i++) {

            var tmp_items = HV_combos[i];
            var tmp_itemA_idx = HVdf.findIndex(x => x.id ===tmp_items[0]);
            var tmp_itemB_idx = HVdf.findIndex(x => x.id ===tmp_items[1])
            var tmp_diff = Math.abs(HVdf[tmp_itemA_idx].rating_round - HVdf[tmp_itemB_idx].rating_round);
            // Make sure difference is within bounds
            if ( (tmp_diff < minDiff) || (tmp_diff > maxDiff) ) {
                continue;
            }
            HV_combo_list.push( {idA: tmp_items[0], idB: tmp_items[1], rating_diff: tmp_diff, match_id: HV_count});
            HV_count++;
        }

        let LV_combo_list = [];
        let LV_count = 1;
        for (var i = 0; i< LV_combos.length; i++) {

            var tmp_items = LV_combos[i];
            var tmp_itemA_idx = LVdf.findIndex(x => x.id ===tmp_items[0]);
            var tmp_itemB_idx = LVdf.findIndex(x => x.id ===tmp_items[1])
            var tmp_diff = Math.abs(LVdf[tmp_itemA_idx].rating_round - LVdf[tmp_itemB_idx].rating_round);
            // Make sure difference is within bounds
            if ( (tmp_diff < minDiff) || (tmp_diff > maxDiff) ) {
                continue;
            }
            LV_combo_list.push( {idA: tmp_items[0], idB: tmp_items[1], rating_diff: tmp_diff, match_id : LV_count});
            LV_count++;
        }


        // Try to get an even split of differences
        let rating_diff_list = []
        let max_num_of_diff = [];
        let list_of_differences = [{diff: 0.5, maxN: 0, unique: 0},
            {diff: 1.0, maxN: 0, unique: 0},
            {diff: 1.5, maxN: 0, unique: 0},
            {diff: 2, maxN: 0, unique: 0},
            {diff: 2.5, maxN: 0, unique: 0}];

        // To make sure there are enough in each value-difference category
        for (i = 0; i < list_of_differences.length; i++) {

            var thisDiff = list_of_differences[i].diff;
            var tmp_diff_LV = LV_combo_list.filter(a => a.rating_diff == thisDiff);
            var tmp_diff_MV = MV_combo_list.filter(a => a.rating_diff == thisDiff);
            var tmp_diff_HV = HV_combo_list.filter(a => a.rating_diff == thisDiff);

            // Across all value categories, determine how many possible combinations are possible
            var tmp_max = Math.min(tmp_diff_LV.length,tmp_diff_MV.length,tmp_diff_HV.length);

            // Unique IDs
            var unique_LV = [];
            var unique_MV = [];
            var unique_HV = [];
            for (j=0;j<tmp_diff_LV.length;j++) {
                unique_LV.push(tmp_diff_LV[j].idA);
                unique_LV.push(tmp_diff_LV[j].idB);

            }
            unique_LV = [...new Set(unique_LV)];

            for (j=0;j<tmp_diff_MV.length;j++) {
                unique_MV.push(tmp_diff_MV[j].idA);
                unique_LV.push(tmp_diff_MV[j].idB);

            }
            unique_MV = [...new Set(unique_MV)];

            for (j=0;j<tmp_diff_HV.length;j++) {
                unique_HV.push(tmp_diff_HV[j].idA);
                unique_HV.push(tmp_diff_HV[j].idB);

            }
            unique_HV = [...new Set(unique_HV)];

            var tmp_unique = {LV: unique_LV,
                            MV: unique_MV,
                           HV: unique_HV};

            list_of_differences[i].maxN = tmp_max;
            list_of_differences[i].unique = tmp_unique;

        }

        // Number of trials to generate per value-difference
        // Start out with an equal number across difficulty levels
        var n_trial_per_diff = [
            nTrial/list_of_differences.length, // 0.5
            nTrial/list_of_differences.length, // 1.0
            nTrial/list_of_differences.length, // 1.5
            nTrial/list_of_differences.length, // 2.0
            nTrial/list_of_differences.length  // 2.5
        ];

        var check = 0;
        // Make sure each difference has trials in each value categoryu
        while (check == 0) {
            var nCheck = 0;
            for (i=0;i<n_trial_per_diff.length;i++) {
                list_of_differences[i].maxN;
                // If the number of trials per difference is less than maxN, then we good
                if (n_trial_per_diff[i] <= list_of_differences[i].maxN) {
                    nCheck++;
                } else {
                    // Otherwise, remove a trial and place it elsewhere
                    n_trial_per_diff[i] = n_trial_per_diff[i] - 1;
                    if(i==0) {
                        n_trial_per_diff[i] = n_trial_per_diff[i] - 1;
                        n_trial_per_diff[i+1] =  n_trial_per_diff[i+1] + 1;
                        i=-1; continue;
                    } else {
                        n_trial_per_diff[i] = n_trial_per_diff[i] - 1;
                        n_trial_per_diff[i-1] =  n_trial_per_diff[i-1] + 1;
                        i=-1; continue;
                    }
                }
            }
            // If all differences meet criteria, break loop
            if (nCheck == n_trial_per_diff.length) {
                check = 1;
            }
        }
        //console.log(n_trial_per_diff)
        //console.log(list_of_differences)

        // Generate trials
        for (var i=0;i<list_of_differences.length;i++){
            var potential_diff = list_of_differences[i].diff;
            for (var j=0;j<=n_trial_per_diff[i];j++) {
                var tmp_lv = generateTrial(LVdf,potential_diff);

                var tmp_mv = generateTrial(MVdf,potential_diff);

                var tmp_hv = generateTrial(HVdf,potential_diff);

                LV_trial_list.push(tmp_lv)
                MV_trial_list.push(tmp_mv)
                HV_trial_list.push(tmp_hv)
            }
        }

        // Check on number of each
        /*
        console.log(list_of_differences[0].maxN)
        console.log(list_of_differences[1].maxN)
        console.log(list_of_differences[2].maxN)
        console.log(list_of_differences[3].maxN)
        console.log(list_of_differences[4].maxN)
        */

        // Now fill dataframes with actual trial info

        for (i=0;i<=nTrial;i++) {
            var tmp_items = LV_trial_list[i];
            var tmp_itemA_idx = LVdf.findIndex(x => x.id ===tmp_items['idA']) ;
            var tmp_itemB_idx = LVdf.findIndex(x => x.id ===tmp_items['idB']) ;

            var tmp_trial = {trial:(i+1), val_cat: 'LV',
                        item_a_img: LVdf[tmp_itemA_idx]['image'],
                        item_b_img: LVdf[tmp_itemB_idx]['image'],
                        item_a_rating: LVdf[tmp_itemA_idx]['rating'],
                        item_b_rating: LVdf[tmp_itemB_idx]['rating'],
                        rating_diff: tmp_items['rating_diff'] };

            foodDF.push(tmp_trial);

        }

        for (i=0;i<=nTrial;i++) {
            var tmp_items = MV_trial_list[i];
            var tmp_itemA_idx = MVdf.findIndex(x => x.id ===tmp_items['idA']) ;
            var tmp_itemB_idx = MVdf.findIndex(x => x.id ===tmp_items['idB']) ;

            var tmp_trial = {trial:(i+1), val_cat: 'MV',
                        item_a_img: MVdf[tmp_itemA_idx]['image'],
                        item_b_img: MVdf[tmp_itemB_idx]['image'],
                        item_a_rating: MVdf[tmp_itemA_idx]['rating'],
                        item_b_rating: MVdf[tmp_itemB_idx]['rating'],
                        rating_diff: tmp_items['rating_diff'] };

            foodDF.push(tmp_trial);

        }

        for (i=0;i<=nTrial;i++) {
            var tmp_items = HV_trial_list[i];
            var tmp_itemA_idx = HVdf.findIndex(x => x.id ===tmp_items['idA']) ;
            var tmp_itemB_idx = HVdf.findIndex(x => x.id ===tmp_items['idB']) ;
           // if (i %%)

            var tmp_trial = {trial:(i+1), val_cat: 'HV',
                        item_a_img: HVdf[tmp_itemA_idx]['image'],
                        item_b_img: HVdf[tmp_itemB_idx]['image'],
                        item_a_rating: HVdf[tmp_itemA_idx]['rating'],
                        item_b_rating: HVdf[tmp_itemB_idx]['rating'],
                        rating_diff: tmp_items['rating_diff'] };

            foodDF.push(tmp_trial);

        }
        console.log("Number of food choice trials: ", foodDF.length);
        console.log("These are the foods we'll use",foodDF);
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  Routine instr_1
    CodeComponent instr_dict
      Code Type = Auto->JS
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      Begin Experiment:
        nrounds = 135
      Begin Routine:
        instr_back_txt = visual.TextStim(win=win, name='back_forth',
            text='',
            font='Arial',
            pos=(0, -.4), height=0.05, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        instr_back_txt.text = '\nPress RIGHT ARROW to continue.'
        instr_back_txt.autoDraw = True
        #win.flip()

        # 1 - Display treasure chests
        # 5 - Display rainbow

        if BONUS_BOOL == 1:
            instr_strs = {}
            instr_strs[0] = f'Today, you will make some choices about foods. There are multiple parts to this study. Please pay attention to the instructions for each part, as they can be different.'
            instr_strs[1] = f'Here are two diffferent food examples\n\n\n\n\n\n\n\n\n\n\n\n\n'
            instr_strs[2] = f'Over {nrounds} rounds, you will be choosing the better of two treasure chests. The value of each treasure chest is simply the sum of the values of each crystal in the chest. The crystals are each worth a different number of points depending on their color, and each color is equally likely to appear. In this task, every point is worth {conversion_rate*100} cents. In order to know the value of a treasure chest, you will first need to learn what each color is worth.\n\n\n'
            instr_strs[3] = f'The following screen will display the colors you will see throughout this task.'
            instr_strs[4] = f'The value of the colors increases across the spectrum, from left to right.\n\n\n\n\n\n\n\n\n\n\n\n\n\n'
        else:
            instr_strs = {}
            instr_strs[0] = f'Welcome to the study! \nBefore we begin, please close any unnecessary programs or applications on your computer. This will help the study run more smoothly.\nAlso, please close any browser tabs that could produce popups or alerts that would interfere with the study. Finally, once the study has started, DO NOT EXIT fullscreen mode.'
            instr_strs[1] = f'Today, your task will be to make decisions involving food items, like the examples in the food images below. There are multuple parts to this study. Please pay attention to the instructions for each part, as each one is different.\n\n\n\n\n\n\n\n\n\n\n\n\n'
            instr_strs[2] = f'When making choices involving food images, please imagine what it would be like to consume the associated food items. Based on your actual choices, you will be given the opportunity to view a food image at the end of the study.'

        instr_disp_txt = visual.TextStim(win=win, name='instructions',
            text='',
            font='Arial',
            pos=(0, 0), height=0.04, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
        instr_disp_txt.text = instr_strs[0]
        instr_disp_txt.autoDraw = True

        curr_instr = 0
      Each Frame:
        instr_keys = event.getKeys()

        if curr_instr == 0:
            instr_back_txt.text = '\nPress RIGHT ARROW to continue.'

            if 'right' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr += 1
                instr_disp_txt.text = instr_strs[curr_instr]
                instr_back_txt.autoDraw = True
        #        win.flip()
        elif curr_instr == 2: #Last slide
            instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to begin.'
            if 'right' in instr_keys:
                instr_keyboard.clearEvents()
                continueRoutine = False
            elif 'left' in instr_keys:
                instr_keyboard.clearEvents()
                curr_instr -= 1
                instr_disp_txt.text = instr_strs[curr_instr]

                # if prev instr == 0, then remove left arrow as option
                if curr_instr == 0:
                    instr_back_txt.autoDraw = False
                else:
                    instr_back_txt.autoDraw = True
        else:
            if curr_instr == 1:
                #social_image.setAutoDraw(True)
                if FOOD_BOOL == 1:
                    food_image_1.setAutoDraw(True)
                    food_image_2.setAutoDraw(True)
                else:
                    drug_image.setAutoDraw(True)

            instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'
            if 'right' in instr_keys:
                social_image.setAutoDraw(False)
                food_image_1.setAutoDraw(False)
                food_image_2.setAutoDraw(False)
                drug_image.setAutoDraw(False)

                instr_keyboard.clearEvents()
                curr_instr += 1
                instr_disp_txt.text = instr_strs[curr_instr]
                instr_back_txt.autoDraw = True
        #        win.flip()
            elif 'left' in instr_keys:

                social_image.setAutoDraw(False)
                food_image_1.setAutoDraw(False)
                food_image_2.setAutoDraw(False)
                drug_image.setAutoDraw(False)

                instr_keyboard.clearEvents()
                curr_instr -= 1
                instr_disp_txt.text = instr_strs[curr_instr]

                # if prev instr == 0, then remove left arrow as option
                if curr_instr == 0:
                    instr_back_txt.text = '\nPress RIGHT ARROW to continue.'
                else:
                    instr_back_txt.text = 'Press LEFT ARROW to go back.\nPress RIGHT ARROW to continue.'

        #        win.flip()
      End Routine:
        instr_back_txt.autoDraw = False
        instr_disp_txt.autoDraw = False
    KeyboardComponent instr_keyboard
      allowedKeys = 'left','right'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent set_ex_images
      Code Type = Auto->JS
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      Begin Experiment:
        food_image_1 = visual.ImageStim(
            win=win,
            name='food_image',
            image='stimuli/practice/AA026337.png', mask=None, anchor='center',
            ori=0.0, pos=(-.300, -.1), size=(0.3, 0.3),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-1.0)
        food_image_2 = visual.ImageStim(
            win=win,
            name='food_image',
            image='stimuli/practice/AA026339.png', mask=None, anchor='center',
            ori=0.0, pos=(.300, -.1), size=(0.3, 0.3),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-1.0)
        drug_image = visual.ImageStim(
            win=win,
            name='drug_image',
            image='stimuli/practice/AA026307.png', mask=None, anchor='center',
            ori=0.0, pos=(-.300, -.1), size=(.25, .25),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=False, depth=-1.0)
        social_image = visual.ImageStim(
            win=win,
            name='social_image',
            image='stimuli/practice/AA026307.png', mask=None, anchor='center',
            ori=0.0, pos=(.300, -.1), size=(.25, .25),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=False,
            texRes=128.0, interpolate=False, depth=-2.0)
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
  Routine practice_choice
    CodeComponent outline_settings_2
      Code Type = Auto->JS
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      Begin Routine:
        thisFoodA = imageA
        thisFoodB = imageB
      End Routine:
        if choice_resp_2.keys == 'f': #left
            made_choice = 1
            this_trial_choice = 'left'
            outline_shape.setPos((-.45, 0), log=True)
            outline_shape.setSize(.3,.35)
            outline_shape.setAutoDraw(True)
        elif choice_resp_2.keys == 'j': #right
            made_choice = 1
            this_trial_choice = 'right'
            outline_shape.setPos((.45, 0), log=True)
            outline_shape.setSize(.3,.35)
            outline_shape.setAutoDraw(True)

        thisExp.addData('agent_choice', this_trial_choice)
    KeyboardComponent choice_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent def_randchoice
      Code Type = Both
      disabled = True
      Begin Experiment:
        import random

        def random_choices(k):
            return random.choices(k, k=6)
    ImageComponent practice_img_A
      image [set every repeat] = $thisFoodA
      pos = (-0.45, 0)
      size = (0.25, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent practice_img_B
      image [set every repeat] = $thisFoodB
      pos = (0.45, 0)
      size = (0.25, 0.3)
      startVal [time (s)] = 0.0
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  Routine food_slide_show
    CodeComponent slide_show_code
      Code Type = Auto->JS
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      Begin Routine:
        slide_show_food = image;
    ImageComponent slide_show_img
      image [set every repeat] = $slide_show_food
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.30
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  Routine choice_feedback
    CodeComponent choice_feedback_2
      Code Type = Auto->JS
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      Begin Routine:
        if this_trial_choice == 'left': #left
            outline_shape.setPos((-.45, 0), log=True)
            outline_shape.setSize(.5, .5)
            outline_shape.setAutoDraw(True)
        elif this_trial_choice == 'right': #right
            outline_shape.setPos((.45, 0), log=True)
            outline_shape.setSize(.5, .5)
            outline_shape.setAutoDraw(True)
      End Routine:
        outline_shape.setAutoDraw(False)
    ImageComponent ImageA
      image [set every repeat] = $thisImageA
      pos = (-0.45, 0)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent ImageB
      image [set every repeat] = $thisImageB
      pos = (0.45, 0)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_feedback
    CodeComponent practice_feedback_2
      Code Type = Auto->JS
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      Begin Routine:
        thisFoodA = imageA;
        thisFoodB = imageB;
        if this_trial_choice == 'left': #left
            outline_shape.setPos((-.45, 0), log=True)
            outline_shape.setSize(.3,.35)
            outline_shape.setAutoDraw(True)
        elif this_trial_choice == 'right': #right
            outline_shape.setPos((.45, 0), log=True)
            outline_shape.setSize(.3,.35)
            outline_shape.setAutoDraw(True)
      End Routine:
        outline_shape.setAutoDraw(False)
    ImageComponent practice_img_A_feedback
      image [set every repeat] = $thisFoodA
      pos = (-0.45, 0)
      size = (0.25, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent practice_img_2_feedback
      image [set every repeat] = $thisFoodB
      pos = (0.45, 0)
      size = (0.25, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine choice_instr
    CodeComponent start_task_txt
      Code Type = Auto->JS
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      Begin Routine:
        if BONUS_BOOL == 1:
            start_task_txt_disp = 'You are now ready to begin the experiment. In this portion of the study, you will no longer be shown how much each treasure chest is worth. Remember, your bonus payment will depend on your choices in this phase. At the end of the experiment, one random round will be selected, and you will get points for whichever option you chose.\n\nWhen you are ready, press the SPACE BAR to continue.'
        else:
            start_task_txt_disp = 'You are now ready to begin the Food Choice Task. Remember, use the F key to select the image on the left and the J key to select the image on the right.\n\nWhen you are ready, press the SPACE BAR to continue.'
    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_task_txt_disp
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reward_info
    CodeComponent bonus_txt
      Code Type = Auto->JS
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      Begin Experiment:
        nseconds = 10;
      Begin Routine:
        bonus_txt_disp = f'On this round, you chose the highlighted item. As your reward, you will be able to view this image.\n\nPress the SPACE BAR to view this food image.\n\n\n\n\n\n'

        if bonus_choice == 'left': #left
            outline_shape.setPos((-.35, -.25), log=True)
            outline_shape.setSize((.35, .35))
            outline_shape.setAutoDraw(True)
        elif bonus_choice == 'right': #right
            outline_shape.setPos((.35, -.25), log=True)
            outline_shape.setSize((.35, .35))
            outline_shape.setAutoDraw(True)
      End Routine:
        outline_shape.setAutoDraw(False)
    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $bonus_txt_disp
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_left
      image [set every repeat] = $bonus_img_left
      pos = (-0.35, -.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image_right
      image [set every repeat] = $bonus_img_right
      pos = (0.35, -.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine view_reward
    ImageComponent bous_img
      image [set every repeat] = $bonus_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent bonus_img_txt
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.5
      text = Press the Space Bar to Exit
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    KeyboardComponent exit_rsp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine end_experiment
    TextComponent end_exp_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thank you for your time
        Please DO NOT close browser
        You will be redirected shortly
    CodeComponent id_pass
      Code Type = JS
      Begin JS Experiment:
        var new_url;
        new_url = 'https://app.prolific.com/submissions/complete?cc=C1NBBPAC';
        console.log(new_url);
        psychoJS.setRedirectUrls(new_url, '');
  Routine fixation_750ms
    TextComponent text
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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Flow
  Routine start_exp
  Routine instr_1
  LoopInitiator skip_food loopType="TrialHandler"
    loopType = sequential
    nReps = FOOD_BOOL * RATE_BOOL
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    LoopInitiator slide_show_loop loopType="TrialHandler"
      conditionsFile = finalfooditems.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('image', 'stimuli/food/1%milk.jpg')]),
        OrderedDict([('image', 'stimuli/food/air popcorn.jpg')]),
        OrderedDict([('image', 'stimuli/food/american cheese.jpg')]),
        OrderedDict([('image', 'stimuli/food/apple slices.jpg')]),
        OrderedDict([('image', 'stimuli/food/avacado.jpg')]),
        OrderedDict([('image', 'stimuli/food/baby cheese.jpg')]),
        OrderedDict([('image', 'stimuli/food/bagel and cc.jpg')]),
        OrderedDict([('image', 'stimuli/food/bagel plain.jpg')]),
        OrderedDict([('image', 'stimuli/food/baguette oil.jpg')]),
        OrderedDict([('image', 'stimuli/food/baked potato.jpg')]),
        OrderedDict([('image', 'stimuli/food/banana.jpg')]),
        OrderedDict([('image', 'stimuli/food/broccoli cauliflower.jpg')]),
        OrderedDict([('image', 'stimuli/food/brownie.jpg')]),
        OrderedDict([('image', 'stimuli/food/burger.jpg')]),
        OrderedDict([('image', 'stimuli/food/celery and carrot sticks.jpg')]),
        OrderedDict([('image', 'stimuli/food/Cheese nachos.jpg')]),
        OrderedDict([('image', 'stimuli/food/cherries.jpg')]),
        OrderedDict([('image', 'stimuli/food/cherry tomato.jpg')]),
        OrderedDict([('image', 'stimuli/food/chicken nuggets2.jpg')]),
        OrderedDict([('image', 'stimuli/food/cookies.jpg')]),
        OrderedDict([('image', 'stimuli/food/corn cob.jpg')]),
        OrderedDict([('image', 'stimuli/food/cucumber slices.jpg')]),
        OrderedDict([('image', 'stimuli/food/cupcakes am.jpg')]),
        OrderedDict([('image', 'stimuli/food/doughnuts.jpg')]),
        OrderedDict([('image', 'stimuli/food/eggs.jpg')]),
        OrderedDict([('image', 'stimuli/food/french fries.jpg')])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
      Routine food_slide_show
    LoopTerminator slide_show_loop
    Routine start_food_ratings
    LoopInitiator food_rating_loop loopType="TrialHandler"
      conditionsFile = finalfooditems.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'foodItem': '1%milk.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/1%milk.jpg'},
        {'foodItem': 'air popcorn.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/air popcorn.jpg'},
        {'foodItem': 'american cheese.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/american cheese.jpg'},
        {'foodItem': 'apple slices.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/apple slices.jpg'},
        {'foodItem': 'avacado.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/avacado.jpg'},
        {'foodItem': 'baby cheese.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/baby cheese.jpg'},
        {'foodItem': 'bagel and cc.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/bagel and cc.jpg'},
        {'foodItem': 'bagel plain.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/bagel plain.jpg'},
        {'foodItem': 'baguette oil.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/baguette oil.jpg'},
        {'foodItem': 'baked potato.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/baked potato.jpg'},
        {'foodItem': 'banana.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/banana.jpg'},
        {'foodItem': 'broccoli cauliflower.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/broccoli cauliflower.jpg'},
        {'foodItem': 'brownie.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/brownie.jpg'},
        {'foodItem': 'burger.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/burger.jpg'},
        {'foodItem': 'celery and carrot sticks.jpg', 'path': 'stimuli/food/', 'image': 'stimuli/food/celery and carrot sticks.jpg'}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
      Routine rateFood
      Routine fixation_750ms
    LoopTerminator food_rating_loop
    Routine sort_food
  LoopTerminator skip_food
  Routine hide_mouse_routine
  LoopInitiator skip_practice loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = PRACTICE_BOOL
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    Routine prac_instr
    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = practice.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('imageA', 'stimuli/practice/AA026339.png'), ('imageB', 'stimuli/practice/AA026307.png')]),
        OrderedDict([('imageA', 'stimuli/practice/AA026360.png'), ('imageB', 'stimuli/practice/AA026337.png')]),
        OrderedDict([('imageA', 'stimuli/practice/AA026339.png'), ('imageB', 'stimuli/practice/AA026360.png')]),
        OrderedDict([('imageA', 'stimuli/practice/AA026337.png'), ('imageB', 'stimuli/practice/AA026339.png')])]
      Routine practice_choice
      Routine practice_feedback
      Routine fixation_750ms
    LoopTerminator practice
  LoopTerminator skip_practice
  Routine choice_instr
  LoopInitiator choice_trials loopType="TrialHandler"
    conditionsFile = foodChoiceTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'OV': 'MV', 'ovN': 30, 'TrialN': 76, 'Rand': 0.08525880493962434},
      {'OV': 'HV', 'ovN': 40, 'TrialN': 132, 'Rand': 0.7205485878547329},
      {'OV': 'LV', 'ovN': 20, 'TrialN': 20, 'Rand': 0.9018488476849053},
      {'OV': 'MV', 'ovN': 5, 'TrialN': 51, 'Rand': 0.19931107943907955},
      {'OV': 'HV', 'ovN': 7, 'TrialN': 99, 'Rand': 0.1096954841602038},
      {'OV': 'MV', 'ovN': 46, 'TrialN': 92, 'Rand': 0.4053839591330928},
      {'OV': 'MV', 'ovN': 1, 'TrialN': 47, 'Rand': 0.6663348866909016},
      {'OV': 'LV', 'ovN': 33, 'TrialN': 33, 'Rand': 0.9196814935548492},
      {'OV': 'MV', 'ovN': 17, 'TrialN': 63, 'Rand': 0.4748895944093632},
      {'OV': 'MV', 'ovN': 28, 'TrialN': 74, 'Rand': 0.6607508223059231},
      {'OV': 'HV', 'ovN': 22, 'TrialN': 114, 'Rand': 0.9468179523518567},
      {'OV': 'HV', 'ovN': 34, 'TrialN': 126, 'Rand': 0.728090712035058},
      {'OV': 'MV', 'ovN': 12, 'TrialN': 58, 'Rand': 0.08222218400607562},
      {'OV': 'HV', 'ovN': 13, 'TrialN': 105, 'Rand': 0.7438098806208177},
      {'OV': 'LV', 'ovN': 6, 'TrialN': 6, 'Rand': 0.5592706154884626},
      {'OV': 'HV', 'ovN': 46, 'TrialN': 138, 'Rand': 0.34701372569355826},
      {'OV': 'LV', 'ovN': 18, 'TrialN': 18, 'Rand': 0.4462769790620936},
      {'OV': 'LV', 'ovN': 38, 'TrialN': 38, 'Rand': 0.5608595338940734},
      {'OV': 'LV', 'ovN': 28, 'TrialN': 28, 'Rand': 0.3324970549823477},
      {'OV': 'LV', 'ovN': 27, 'TrialN': 27, 'Rand': 0.12768501385584052},
      {'OV': 'MV', 'ovN': 9, 'TrialN': 55, 'Rand': 0.13719114279000333},
      {'OV': 'LV', 'ovN': 35, 'TrialN': 35, 'Rand': 0.7976485856479212},
      {'OV': 'MV', 'ovN': 34, 'TrialN': 80, 'Rand': 0.3891853247252587}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
    Routine choice
    Routine choice_feedback
    Routine fixation_750ms
  LoopTerminator choice_trials
  Routine colorblindness
  Routine ender
  Routine reward_info
  Routine view_reward
  Routine end_experiment
